CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:FL
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceEdges:[module_num:5|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
    Select the input image:FL
    Name the output image:EdgedImage
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertEdge
    Image or measurement?:Image
    Select the first image:EdgedImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:FL
    Name the output image:EnhenceCircle
    Select the operation:Enhance
    Feature size:2
    Feature type:Circles
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
ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:EnhenceCircle
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EdgedImage
    Multiply the second image by:5
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:Protrusion
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:FL
    Name the output image:OverlayFL_PrimaryObj
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Protrusion

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:OverlayFL_PrimaryObj
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:FL-PrimaryObj
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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